PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s_%s' %(expInfo['participant'],expInfo['session'],  expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'gender': u'sag ich nicht', u'age': u'sag ich nicht', u'session': u'', u'participant': u''}
  expName = KonfMaskTime_v1
  Units = use prefs
  Screen = 1
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Routines
  Routine Instruktion
    CodeComponent go_on_inst
      Each Frame:
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed:

          buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    TextComponent instruktion
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Herzlich Willkommen zu unserem Experiment!
        In jedem Durchgang entscheiden Sie bitte, ob die Streifen des Gitters waagrecht oder senkrecht sind.
        Zusätzlich geben Sie bitte an, wie sicher Sie sich dabei sind.
        Wenn Sie keine weiteren Fragen mehr haben, drücken Sie bitte mit Ihrem Zeigefinger die Taste am Joystick, um zu beginnen.
  Routine Blockende
    CodeComponent Joy_reset
      Begin Routine:
        buttonNotYetPressed = True
    CodeComponent go_on_Block
      Each Frame:
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed:

          buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    TextComponent Blockende_Text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Ende des Durchgangs
        Bitte druecken Sie die Joysticktaste, um weiter zu machen
  Routine Konfidenzrating
    CodeComponent code_2
      Begin Experiment:
        from psychopy.hardware import joystick
        joystick.backend='pyglet'
        joy = joystick.Joystick(0)
    CodeComponent code_3
      Begin Routine:
        buttonNotYetPressed = True
    CodeComponent code_4
      Each Frame:
        xPos = joy.getX()
        newPosition = [xPos * 9, -7]
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed:
            currentTime = KonfidenzratingClock.getTime()
            thisExp.addData('Rating1', xPos)
            thisExp.addData('Rating1RT', currentTime)
            buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Wie sicher bist du dir,
        dass deine Antwort richtig war?
    PolygonComponent VisuelleAnalogSkala
      fillColor = $[1,1,1]
      pos = [0, -7]
      units = deg
      startVal [time (s)] = 3
      size = [18, .1]
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    PolygonComponent StrichLinks
      fillColor = $[1,1,1]
      pos = [-9, -7]
      units = deg
      startVal [time (s)] = 3
      size = [0.1, 1]
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    PolygonComponent StrichRechts
      fillColor = $[1,1,1]
      pos = [9, -7]
      units = deg
      startVal [time (s)] = 3
      size = [0.1, 1]
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    TextComponent LinkerText
      text = Gar nicht sicher
      pos = [-0.4, -0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent RechterText
      text = Sehr sicher
      pos = [0.4, -0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    PolygonComponent StrichLinksOben
      fillColor = $[1,1,1]
      pos = [-10, 10]
      units = deg
      startVal [time (s)] = 3
      size = [0.1, 1]
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  Routine trial
    CodeComponent load_Joystick
      Begin Experiment:
        from psychopy.hardware import joystick
        joystick.backend='pyglet'
        joy = joystick.Joystick(0)
        newPosition = [0,0]
        buttonNotYetPressed = True
    CodeComponent stimulus_propteries
      Begin Routine:
        ori = np.random.choice([0,90])
        thisExp.addData('Orientrierung', ori)

        if ori == 90:
            correctAns = 'waagrecht'
        else:
            correctAns = 'senkrecht'

        thisExp.addData('expectedAnswer', correctAns)
    CodeComponent reset_joystick
      Begin Routine:
        buttonNotYetPressed = True
    CodeComponent Joystick_Position
      Each Frame:
        xPos = joy.getX()
        joyyPos = joy.getY()

        if (joyyPos <= -0.70):
          #showMarker = True
          yPos = 10
          ans = 'senkrecht'

        elif (joyyPos >= 0.70):
          #showMarker = True
          yPos = - 10
          ans = 'waagrecht'

        else:
         #showMarker = False
         yPos = 20000

        newPosition = [xPos * 10, yPos]
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed and (trialClock.getTime() >= (1.5+SOA/1000)) and (yPos != 20000):
          currentTime = trialClock.getTime()
          thisExp.addData('Ans', ans)
          thisExp.addData('Rating', xPos)
          thisExp.addData('RatingRT', currentTime)
          if (correctAns == ans):
            correct = 1
          else:
            correct = 0
          thisExp.addData('ResponseCorr', correct)
          buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Fixationskreuz
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent TargetStimulus
      stopVal [duration (s)] = SOA/1000
      units = deg
      ori [set every repeat] = ori
      startVal [time (s)] = 1
      image = LowerContrastTarget.png
      size = [3, 3]
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    ImageComponent Maske
      stopVal [duration (s)] = 0.5
      units = deg
      startVal [time (s)] = 1+SOA/1000
      image [set every repeat] = checkerBoardSmall.png
      size = [4, 4]
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    PolygonComponent SkalaSenkrecht
      fillColor = $[1,1,1]
      pos = [0, 10]
      units = deg
      startVal [time (s)] = 1.5+SOA/1000
      size = [20, .1]
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    PolygonComponent SkalaWaagrecht
      fillColor = $[1,1,1]
      pos = [0, -10]
      units = deg
      startVal [time (s)] = 1.5+SOA/1000
      size = [20, .1]
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    PolygonComponent Marker
      fillColor = $[1,1,1]
      pos [set every frame] = newPosition
      units = deg
      ori = 45
      startVal [time (s)] = 1.5+SOA/1000
      size = [0.7, 0.7]
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    PolygonComponent StrichObenLinks
      fillColor = $[1,1,1]
      pos = [-10, 10]
      units = deg
      startVal [time (s)] = 1.5+SOA/1000
      size = [0.1, 1]
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    PolygonComponent StrichObenRechts
      fillColor = $[1,1,1]
      pos = [10, 10]
      units = deg
      startVal [time (s)] = 1.5+SOA/1000
      size = [0.1, 1]
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    PolygonComponent StrichUntenLinks
      fillColor = $[1,1,1]
      pos = [-10, -10]
      units = deg
      startVal [time (s)] = 1.5+SOA/1000
      size = [0.1, 1]
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    PolygonComponent StrichUntenRechts
      fillColor = $[1,1,1]
      pos = [10, -10]
      units = deg
      startVal [time (s)] = 1.5+SOA/1000
      size = [0.1, 1]
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    TextComponent Senkrecht
      text = Senkrecht
      pos = [0, 9]
      units = deg
      startVal [time (s)] = 1.5+SOA/1000
      letterHeight = 1
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    TextComponent Waagrecht
      text = Waagrecht
      pos = [0, -9]
      units = deg
      startVal [time (s)] = 1.5+SOA/1000
      letterHeight = 1
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    TextComponent SicherOben
      pos = [13, 10]
      units = deg
      startVal [time (s)] = 1.5+SOA/1000
      letterHeight = 1
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      text:
        Sicher
        senkrecht
    TextComponent SicherUnten
      pos = [13, -10]
      units = deg
      startVal [time (s)] = 1.5+SOA/1000
      letterHeight = 1
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      text:
        Sicher
        waagrecht
    TextComponent UnsicherOben
      pos = [-13, 10]
      units = deg
      startVal [time (s)] = 1.5+SOA/1000
      letterHeight = 1
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      text:
        Unsicher
        senkrecht
    TextComponent UnsicherUnten
      pos = [-13, -10]
      units = deg
      startVal [time (s)] = 1.5+SOA/1000
      letterHeight = 1
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      text:
        Unsicher
        waagrecht
  Routine Ende
    TextComponent Danke
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Geschafft! :)
        Vielen Dank für Ihre Teilnahme.
        Melden Sie sich bitte beim Versuchsleiter.
  Routine Fehlerfeedback
    TextComponent Fehler
      text = Fehler!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine blockende
    CodeComponent code
      Begin Routine:
        myText = 'Das war Block No. ' + str(blocks.thisN+2) + '\n' + 'Bitte druecke die Leertaste, um weiter zu machen'
    TextComponent WeiterMachenWennSoweit
      text [set every repeat] = $myText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys =  'space' 
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Blockende_Training
    CodeComponent reset_joy
      Begin Routine:
        buttonNotYetPressed = True
    CodeComponent go_on_block
      Each Frame:
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed:

          buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    TextComponent Durchgangsende
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        Ende des Durchgangs
        Bitte druecken Sie die Joysticktaste, um weiter zu machen
Flow
  Routine Instruktion
  LoopInitiator trials_Training loopType="TrialHandler"
    conditionsFile = BedingungenMasking.xlsx
    loopType = sequential
    nReps = 12
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    conditions:
      [{u'SOA': 133.3, u'nFrames': 16},
      {u'SOA': 66.7, u'nFrames': 8},
      {u'SOA': 33.3, u'nFrames': 4},
      {u'SOA': 16.7, u'nFrames': 2},
      {u'SOA': 8.3, u'nFrames': 1}]
    Routine trial
    LoopInitiator Feedback_Training loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 1 - correct
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      Routine Fehlerfeedback
    LoopTerminator Feedback_Training
  LoopTerminator trials_Training
  Routine Blockende_Training
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 9
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = BedingungenMasking.xlsx
      loopType = fullRandom
      nReps = 12
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      conditions:
        [{u'SOA': 133.3, u'nFrames': 16},
        {u'SOA': 66.7, u'nFrames': 8},
        {u'SOA': 33.3, u'nFrames': 4},
        {u'SOA': 16.7, u'nFrames': 2},
        {u'SOA': 8.3, u'nFrames': 1}]
      Routine trial
      LoopInitiator WarEsEinFehler loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 1 - correct
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        Routine Fehlerfeedback
      LoopTerminator WarEsEinFehler
    LoopTerminator trials
    Routine Blockende
  LoopTerminator blocks
  Routine Ende
