PsychoPy2experiment version="1.83.04"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u'', u'experimentator': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = JRRdk_v3
  Screen = 1
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Routines
  Routine Instruktion
    CodeComponent go_on_inst
      Each Frame:
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed:

          buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    TextComponent instruktion
      color = $[0.8,0.8,0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Herzlich Willkommen zu unserem Experiment!
        In jedem Durchgang geben Sie bitte an, ob sich ein Teil der Punkte entweder nach oben oder nach unten bewegt.
        Zusätzlich sagen Sie bitte jedes Mal, wie sicher Sie sich dabei sind.
        Wenn Sie keine weiteren Fragen mehr haben, drücken Sie bitte mit Ihrem Zeigefinger die Taste am Joystick, um zu beginnen.
  Routine Blockende
    CodeComponent Joy_reset
      Begin Routine:
        buttonNotYetPressed = True
    CodeComponent go_on_Block
      Each Frame:
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed:

          buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    TextComponent Blockende_Text
      color = $[0.8,0.8,0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Ende des Durchgangs
        Bitte druecken Sie die Joysticktaste, um weiter zu machen
  Routine Konfidenzrating
    CodeComponent code_2
      Begin Experiment:
        from psychopy.hardware import joystick
        joystick.backend='pyglet'
        joy = joystick.Joystick(0)
    CodeComponent code_3
      Begin Routine:
        buttonNotYetPressed = True
    CodeComponent code_4
      Each Frame:
        xPos = joy.getX()
        newPosition = [xPos * 9, -7]
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed:
            currentTime = KonfidenzratingClock.getTime()
            thisExp.addData('Rating1', xPos)
            thisExp.addData('Rating1RT', currentTime)
            buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Wie sicher bist du dir,
        dass deine Antwort richtig war?
    PolygonComponent VisuelleAnalogSkala
      fillColor = $[1,1,1]
      pos = [0, -7]
      units = deg
      startVal [time (s)] = 3
      size = [18, .1]
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    PolygonComponent StrichLinks
      fillColor = $[1,1,1]
      pos = [-9, -7]
      units = deg
      startVal [time (s)] = 3
      size = [0.1, 1]
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    PolygonComponent StrichRechts
      fillColor = $[1,1,1]
      pos = [9, -7]
      units = deg
      startVal [time (s)] = 3
      size = [0.1, 1]
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    TextComponent LinkerText
      text = Gar nicht sicher
      pos = [-0.4, -0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent RechterText
      text = Sehr sicher
      pos = [0.4, -0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    PolygonComponent StrichLinksOben
      fillColor = $[1,1,1]
      pos = [-10, 10]
      units = deg
      startVal [time (s)] = 3
      size = [0.1, 1]
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  Routine trial
    CodeComponent load_Joystick
      Begin Experiment:
        from psychopy.hardware import joystick
        joystick.backend='pyglet'
        joy = joystick.Joystick(0)
        newPosition = [0,0]
        buttonNotYetPressed = True
    CodeComponent stimulus_propteries
      Begin Routine:
        if direction == 90:
            correctAns = 'nach oben'
        else:
            correctAns = 'nach unten'

        thisExp.addData('expectedAnswer', correctAns)
    CodeComponent reset_joystick
      Begin Routine:
        buttonNotYetPressed = True
    CodeComponent Joystick_Position
      Each Frame:
        xPos = joy.getX()
        joyyPos = joy.getY()

        if (joyyPos <= -0.70):
          #showMarker = True
          yPos = 10
          ans = 'nach oben'

        elif (joyyPos >= 0.70):
          #showMarker = True
          yPos = - 10
          ans = 'nach unten'

        else:
         #showMarker = False
         yPos = 20000

        newPosition = [xPos * 10, yPos]
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed and (trialClock.getTime() >= 1) and (yPos != 20000):
          currentTime = trialClock.getTime()
          thisExp.addData('Ans', ans)
          thisExp.addData('Rating', xPos)
          thisExp.addData('RatingRT', currentTime)
          if (correctAns == ans):
            correct = 1
          else:
            correct = 0
          thisExp.addData('ResponseCorr', correct)
          buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Fixationskreuz
      text = +
      stopVal [duration (s)] = 1.0
      units = deg
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    DotsComponent dots
      startVal [time (s)] = 1.0
      fieldPos = (0.0, 0.0)
      speed = 5.0/ 120
      noiseDots = position
      dotLife = 100
      units = deg
      refreshDots = repeat
      fieldShape = circle
      coherence [set every repeat] = coherence
      nDots = 262
      durationEstim = 10
      fieldSize = 5.0
      signalDots = same
      dotSize = 2
      dir [set every repeat] = direction
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    PolygonComponent SkalaOben
      fillColor = $[0.8,0.8,0.8]
      pos = [0, 10]
      units = deg
      lineColor = $[0.8,0.8,0.8]
      startVal [time (s)] = 1
      size = [20, .1]
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    PolygonComponent SkalaUnten
      fillColor = $[0.8,0.8,0.8]
      pos = [0, -10]
      units = deg
      lineColor = $[0.8,0.8,0.8]
      startVal [time (s)] = 1
      size = [20, .1]
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    PolygonComponent Marker
      fillColor = $[0.8,0.8,0.8]
      pos [set every frame] = newPosition
      units = deg
      lineColor = $[0.8,0.8,0.8]
      ori = 45
      startVal [time (s)] = 1
      size = [0.7, 0.7]
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    PolygonComponent StrichObenLinks
      fillColor = $[0.8,0.8,0.8]
      pos = [-10, 10]
      units = deg
      lineColor = $[0.8,0.8,0.8]
      startVal [time (s)] = 1
      size = [0.1, 1]
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    PolygonComponent StrichObenRechts
      fillColor = $[0.8,0.8,0.8]
      pos = [10, 10]
      units = deg
      lineColor = $[0.8,0.8,0.8]
      startVal [time (s)] = 1
      size = [0.1, 1]
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    PolygonComponent StrichUntenLinks
      fillColor = $[0.8,0.8,0.8]
      pos = [-10, -10]
      units = deg
      lineColor = $[0.8,0.8,0.8]
      startVal [time (s)] = 1
      size = [0.1, 1]
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    PolygonComponent StrichUntenRechts
      fillColor = $[0.8,0.8,0.8]
      pos = [10, -10]
      units = deg
      lineColor = $[0.8,0.8,0.8]
      startVal [time (s)] = 1
      size = [0.1, 1]
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    TextComponent NachOben
      color = $[0.8,0.8,0.8]
      text = Nach oben
      pos = [0, 9]
      units = deg
      startVal [time (s)] = 1
      letterHeight = 1
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    TextComponent NachUnten
      color = $[0.8,0.8,0.8]
      text = Nach unten
      pos = [0, -9]
      units = deg
      startVal [time (s)] = 1
      letterHeight = 1
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    TextComponent SicherOben
      color = $[0.8,0.8,0.8]
      pos = [13, 10]
      units = deg
      startVal [time (s)] = 1
      letterHeight = 1
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      text:
        Sicher
        nach oben
    TextComponent SicherUnten
      color = $[0.8,0.8,0.8]
      pos = [13, -10]
      units = deg
      startVal [time (s)] = 1
      letterHeight = 1
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      text:
        Sicher
        nach unten
    TextComponent UnsicherOben
      color = $[0.8,0.8,0.8]
      pos = [-13, 10]
      units = deg
      startVal [time (s)] = 1
      letterHeight = 1
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      text:
        Unsicher
        nach oben
    TextComponent UnsicherUnten
      color = $[0.8,0.8,0.8]
      pos = [-13, -10]
      units = deg
      startVal [time (s)] = 1
      letterHeight = 1
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      text:
        Unsicher
        nach unten
  Routine Ende
    TextComponent Danke
      color = $[0.8,0.8,0.8]
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Geschafft! :)
        Vielen Dank für Ihre Teilnahme.
        Melden Sie sich bitte beim Versuchsleiter.
  Routine Fehlerfeedback
    TextComponent Fehler
      text = Fehler!
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine blockende
    CodeComponent code
      Begin Routine:
        myText = 'Das war Block No. ' + str(blocks.thisN+2) + '\n' + 'Bitte druecke die Leertaste, um weiter zu machen'
    TextComponent WeiterMachenWennSoweit
      text [set every repeat] = $myText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys =  'space' 
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Blockende_Training
    CodeComponent reset_joy
      Begin Routine:
        buttonNotYetPressed = True
    CodeComponent go_on_block
      Each Frame:
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed:

          buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    TextComponent Durchgangsende
      color = $[0.8,0.8,0.8]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        Ende des Durchgangs
        Bitte druecken Sie die Joysticktaste, um weiter zu machen
Flow
  Routine Instruktion
  LoopInitiator trials_Training loopType="TrialHandler"
    conditionsFile = BedingungenRDK.xlsx
    loopType = random
    nReps = 8
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    conditions:
      [{u'direction': 90, u'coherence': 0.016},
      {u'direction': 90, u'coherence': 0.032},
      {u'direction': 90, u'coherence': 0.064},
      {u'direction': 90, u'coherence': 0.128},
      {u'direction': 90, u'coherence': 0.256},
      {u'direction': 270, u'coherence': 0.016},
      {u'direction': 270, u'coherence': 0.032},
      {u'direction': 270, u'coherence': 0.064},
      {u'direction': 270, u'coherence': 0.128},
      {u'direction': 270, u'coherence': 0.256}]
    Routine trial
    LoopInitiator Feedback_Training loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 1 - correct
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      Routine Fehlerfeedback
    LoopTerminator Feedback_Training
  LoopTerminator trials_Training
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 8
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    Routine Blockende
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = BedingungenRDK.xlsx
      loopType = fullRandom
      nReps = 8
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      conditions:
        [{u'direction': 90, u'coherence': 0.016},
        {u'direction': 90, u'coherence': 0.032},
        {u'direction': 90, u'coherence': 0.064},
        {u'direction': 90, u'coherence': 0.128},
        {u'direction': 90, u'coherence': 0.256},
        {u'direction': 270, u'coherence': 0.016},
        {u'direction': 270, u'coherence': 0.032},
        {u'direction': 270, u'coherence': 0.064},
        {u'direction': 270, u'coherence': 0.128},
        {u'direction': 270, u'coherence': 0.256}]
      Routine trial
      LoopInitiator WarEsEinFehler loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 1 - correct
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        Routine Fehlerfeedback
      LoopTerminator WarEsEinFehler
    LoopTerminator trials
  LoopTerminator blocks
  Routine Ende
