PsychoPy2experiment version="2020.2.10"
Settings
  Completed URL = completedURL
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'gender': '', 'age': '', 'participant': '', 'session': ''}
  Force stereo = False
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = Konf_RDK_Time
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Routines
  Routine Instruktion
    CodeComponent go_on_inst
      Code Type = Py
      Each Frame:
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed:

          buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    TextComponent instruktion
      color = $[0.8,0.8,0.8]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Herzlich Willkommen zu unserem Experiment!
        In jedem Durchgang geben Sie bitte an, ob sich ein Teil der Punkte entweder nach oben oder nach unten bewegt.
        Zusätzlich sagen Sie bitte jedes Mal, wie sicher Sie sich dabei sind.
        Wenn Sie keine weiteren Fragen mehr haben, drücken Sie bitte mit Ihrem Zeigefinger die Taste am Joystick, um zu beginnen.
  Routine Blockende
    CodeComponent Joy_reset
      Code Type = Py
      Begin Routine:
        buttonNotYetPressed = True
    CodeComponent go_on_Block
      Code Type = Py
      Each Frame:
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed:

          buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    TextComponent Blockende_Text
      color = $[0.8,0.8,0.8]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Ende des Durchgangs
        Bitte druecken Sie die Joysticktaste, um weiter zu machen
  Routine Konfidenzrating
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        from psychopy.hardware import joystick
        joystick.backend='pyglet'
        joy = joystick.Joystick(0)
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        buttonNotYetPressed = True
    CodeComponent code_4
      Code Type = Py
      Each Frame:
        xPos = joy.getX()
        newPosition = [xPos * 9, -7]
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed:
            currentTime = KonfidenzratingClock.getTime()
            thisExp.addData('Rating1', xPos)
            thisExp.addData('Rating1RT', currentTime)
            buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Wie sicher bist du dir,
        dass deine Antwort richtig war?
    PolygonComponent VisuelleAnalogSkala
      fillColor = $[1,1,1]
      pos = [0, -7]
      shape = rectangle
      size = [18, .1]
      startVal [time (s)] = 3
      units = deg
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    PolygonComponent StrichLinks
      fillColor = $[1,1,1]
      pos = [-9, -7]
      shape = rectangle
      size = [0.1, 1]
      startVal [time (s)] = 3
      units = deg
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    PolygonComponent StrichRechts
      fillColor = $[1,1,1]
      pos = [9, -7]
      shape = rectangle
      size = [0.1, 1]
      startVal [time (s)] = 3
      units = deg
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    TextComponent LinkerText
      letterHeight = 0.07
      pos = [-0.4, -0.7]
      startVal [time (s)] = 0.0
      text = Gar nicht sicher
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    TextComponent RechterText
      letterHeight = 0.07
      pos = [0.4, -0.7]
      startVal [time (s)] = 0.0
      text = Sehr sicher
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    PolygonComponent StrichLinksOben
      fillColor = $[1,1,1]
      pos = [-10, 10]
      shape = rectangle
      size = [0.1, 1]
      startVal [time (s)] = 3
      units = deg
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  Routine trial
    CodeComponent load_Joystick
      Code Type = Py
      Begin Experiment:
        from psychopy.hardware import joystick
        joystick.backend='pyglet'
        joy = joystick.Joystick(0)
        newPosition = [0,0]
        buttonNotYetPressed = True
    CodeComponent stimulus_propteries
      Code Type = Py
      Begin Routine:
        if direction == 90:
            correctAns = 'nach oben'
        else:
            correctAns = 'nach unten'

        thisExp.addData('expectedAnswer', correctAns)
    CodeComponent reset_joystick
      Code Type = Py
      Begin Routine:
        buttonNotYetPressed = True
    CodeComponent Joystick_Position
      Code Type = Py
      Each Frame:
        xPos = joy.getX()
        joyyPos = joy.getY()

        if (joyyPos <= -0.70):
          #showMarker = True
          yPos = 10
          ans = 'nach oben'

        elif (joyyPos >= 0.70):
          #showMarker = True
          yPos = - 10
          ans = 'nach unten'

        else:
         #showMarker = False
         yPos = 20000

        newPosition = [xPos * 10, yPos]
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed and (trialClock.getTime() >= 1) and (yPos != 20000):
          currentTime = trialClock.getTime()
          thisExp.addData('Ans', ans)
          thisExp.addData('Rating', xPos)
          thisExp.addData('RatingRT', currentTime)
          if (correctAns == ans):
            correct = 1
          else:
            correct = 0
          thisExp.addData('ResponseCorr', correct)
          buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent Fixationskreuz
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
      units = deg
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    DotsComponent dots
      coherence [set every repeat] = coherence
      dir [set every repeat] = direction
      dotLife = 100
      dotSize = 2
      durationEstim = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 5.0
      nDots = 262
      noiseDots = position
      refreshDots = repeat
      signalDots = same
      speed = 5.0/ 120
      startVal [time (s)] = 1.0
      units = deg
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    PolygonComponent SkalaOben
      fillColor = $[0.8,0.8,0.8]
      lineColor = $[0.8,0.8,0.8]
      pos = [0, 10]
      shape = rectangle
      size = [20, .1]
      startVal [time (s)] = 1
      units = deg
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    PolygonComponent SkalaUnten
      fillColor = $[0.8,0.8,0.8]
      lineColor = $[0.8,0.8,0.8]
      pos = [0, -10]
      shape = rectangle
      size = [20, .1]
      startVal [time (s)] = 1
      units = deg
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    PolygonComponent Marker
      fillColor = $[0.8,0.8,0.8]
      lineColor = $[0.8,0.8,0.8]
      ori = 45
      pos [set every frame] = newPosition
      shape = rectangle
      size = [0.7, 0.7]
      startVal [time (s)] = 1
      units = deg
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    PolygonComponent StrichObenLinks
      fillColor = $[0.8,0.8,0.8]
      lineColor = $[0.8,0.8,0.8]
      pos = [-10, 10]
      shape = rectangle
      size = [0.1, 1]
      startVal [time (s)] = 1
      units = deg
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    PolygonComponent StrichObenRechts
      fillColor = $[0.8,0.8,0.8]
      lineColor = $[0.8,0.8,0.8]
      pos = [10, 10]
      shape = rectangle
      size = [0.1, 1]
      startVal [time (s)] = 1
      units = deg
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    PolygonComponent StrichUntenLinks
      fillColor = $[0.8,0.8,0.8]
      lineColor = $[0.8,0.8,0.8]
      pos = [-10, -10]
      shape = rectangle
      size = [0.1, 1]
      startVal [time (s)] = 1
      units = deg
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    PolygonComponent StrichUntenRechts
      fillColor = $[0.8,0.8,0.8]
      lineColor = $[0.8,0.8,0.8]
      pos = [10, -10]
      shape = rectangle
      size = [0.1, 1]
      startVal [time (s)] = 1
      units = deg
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    TextComponent NachOben
      color = $[0.8,0.8,0.8]
      letterHeight = 1
      pos = [0, 9]
      startVal [time (s)] = 1
      text = Nach oben
      units = deg
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    TextComponent NachUnten
      color = $[0.8,0.8,0.8]
      letterHeight = 1
      pos = [0, -9]
      startVal [time (s)] = 1
      text = Nach unten
      units = deg
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    TextComponent SicherOben
      color = $[0.8,0.8,0.8]
      letterHeight = 1
      pos = [13, 10]
      startVal [time (s)] = 1
      units = deg
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      text:
        Sicher
        nach oben
    TextComponent SicherUnten
      color = $[0.8,0.8,0.8]
      letterHeight = 1
      pos = [13, -10]
      startVal [time (s)] = 1
      units = deg
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      text:
        Sicher
        nach unten
    TextComponent UnsicherOben
      color = $[0.8,0.8,0.8]
      letterHeight = 1
      pos = [-13, 10]
      startVal [time (s)] = 1
      units = deg
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      text:
        Unsicher
        nach oben
    TextComponent UnsicherUnten
      color = $[0.8,0.8,0.8]
      letterHeight = 1
      pos = [-13, -10]
      startVal [time (s)] = 1
      units = deg
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      text:
        Unsicher
        nach unten
  Routine Ende
    TextComponent Danke
      color = $[0.8,0.8,0.8]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Geschafft! :)
        Vielen Dank für Ihre Teilnahme.
        Melden Sie sich bitte beim Versuchsleiter.
  Routine Fehlerfeedback
    TextComponent Fehler
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Fehler!
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  Routine blockende
    CodeComponent code
      Code Type = Py
      Begin Routine:
        myText = 'Das war Block No. ' + str(blocks.thisN+2) + '\n' + 'Bitte druecke die Leertaste, um weiter zu machen'
    TextComponent WeiterMachenWennSoweit
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $myText
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    KeyboardComponent key_resp_2
      allowedKeys =  'space' 
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Blockende_Training
    CodeComponent reset_joy
      Code Type = Py
      Begin Routine:
        buttonNotYetPressed = True
    CodeComponent go_on_block
      Code Type = Py
      Each Frame:
        buttonIsPressed = joy.getButton(0)

        if buttonIsPressed and buttonNotYetPressed:

          buttonNotYetPressed = False

        if ((not buttonIsPressed) and (not buttonNotYetPressed)):
            continueRoutine = False
    TextComponent Durchgangsende
      color = $[0.8,0.8,0.8]
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Ende des Durchgangs
        Bitte druecken Sie die Joysticktaste, um weiter zu machen
Flow
  Routine Instruktion
  LoopInitiator trials_Training loopType="TrialHandler"
    conditionsFile = BedingungenRDK.xlsx
    loopType = random
    nReps = 8
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    conditions:
      [{'direction': 90, 'coherence': 0.016},
      {'direction': 90, 'coherence': 0.032},
      {'direction': 90, 'coherence': 0.064},
      {'direction': 90, 'coherence': 0.128},
      {'direction': 90, 'coherence': 0.256},
      {'direction': 270, 'coherence': 0.016},
      {'direction': 270, 'coherence': 0.032},
      {'direction': 270, 'coherence': 0.064},
      {'direction': 270, 'coherence': 0.128},
      {'direction': 270, 'coherence': 0.256}]
    Routine trial
    LoopInitiator Feedback_Training loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 1 - correct
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      Routine Fehlerfeedback
    LoopTerminator Feedback_Training
  LoopTerminator trials_Training
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 8
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    Routine Blockende
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = BedingungenRDK.xlsx
      loopType = fullRandom
      nReps = 8
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      conditions:
        [{'direction': 90, 'coherence': 0.016},
        {'direction': 90, 'coherence': 0.032},
        {'direction': 90, 'coherence': 0.064},
        {'direction': 90, 'coherence': 0.128},
        {'direction': 90, 'coherence': 0.256},
        {'direction': 270, 'coherence': 0.016},
        {'direction': 270, 'coherence': 0.032},
        {'direction': 270, 'coherence': 0.064},
        {'direction': 270, 'coherence': 0.128},
        {'direction': 270, 'coherence': 0.256}]
      Routine trial
      LoopInitiator WarEsEinFehler loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 1 - correct
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        Routine Fehlerfeedback
      LoopTerminator WarEsEinFehler
    LoopTerminator trials
  LoopTerminator blocks
  Routine Ende
